PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  color = $[-1,-1,0]
  Experiment info = {u'session': u'001', u'participant': u'test'}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  expName = Calib
  Screen = 1
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Routines
  Routine trial
    GratingComponent grating
      tex = sin
      color [set every repeat] = $Color
      stopVal [duration (s)] = 1
      startVal [time (s)] = 1
      sf = 0
      size = (2, 2)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Color_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.7]},
      {'Color': [-1, -1, -0.6]},
      {'Color': [-1, -1, -0.5]},
      {'Color': [-1, -1, -0.4]},
      {'Color': [-1, -1, -0.3]},
      {'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.7]},
      {'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.7]},
      {'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.7]},
      {'Color': [-1, -1, -1]},
      {'Color': [-1, -1, -0.9]},
      {'Color': [-1, -1, -0.8]},
      {'Color': [-1, -1, -0.7]}]
    Routine trial
  LoopTerminator trials
